PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = strooptask2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text_3
      color [set every repeat] = $colour 
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/anokhimavalankar/Documents/stroop task/cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stimuluscondition': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stimuluscondition': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stimuluscondition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stimuluscondition': 'C', 'correct_res': 'b '}]
    Routine trial
  LoopTerminator trials
  Routine thanks
